PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1000, 1000]
  color = $[0.318,0.318,0.318]
  expName = Experiment_1_v2.3
  exportHTML = manually
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Routines
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
  Routine retrieval
    CodeComponent retrieval_code
      Code Type = Auto->JS
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      Begin Routine:
        storedCols = [encStoredCols1, encStoredCols2, encStoredCols3,
                      encStoredCols4, encStoredCols5, encStoredCols6]

        storedShapes = [encStoredShape1, encStoredShape2, encStoredShape3,
                        encStoredShape4, encStoredShape5, encStoredShape6]

        storedLocs = [encStoredLoc1, encStoredLoc2, encStoredLoc3,
                      encStoredLoc4, encStoredLoc5, encStoredLoc6]

        randCol=[]
        retrievalCol=[]
        for i in storedCols:
            random.randint(0, len(storedCols)-1)
        retrievalCol.append(randCol)



        randShape=[]
        retrievalShape=[]
        for i in randShape:
            random.randint(0, len(storedShapes) -1)
        retrievalShape.append(randShape)

        for i in enumerate(storedShapes):
            retrievalShape.append(storedShapes)

        randLocs=[]
        retrievalLoc=[]
        for i in randLocs:
            random.randint(0, len(storedLocs) -1)
        retrievalLoc.append(randLocs)
      Each Frame:
        from psychopy.visual import Circle
        import psychopy.tools.colorspacetools as cst

        #colour parameters
        cielabColor = (70, 20.0, 38)  # colourspace throughout experiment (L*, a*, b*)
        rgbColor = cst.cielab2rgb(cielabColor)

        cielabLineColor = (0, 0, 0) # black line colour
        rgbLineColor = cst.cielab2rgb(cielabLineColor)

        cielabStimFill = (69.98, 0, 0)  # grey stimulus fill color
        rgbStimFill = cst.cielab2rgb(cielabStimFill)

        # set up the window
        win = visual.Window([1000, 1000],
            monitor="testMonitor", color=[0.168,0.168,0.168])
        print("FRAME")

        # colour cue
        colour_cue = visual.Circle(win, units='norm', radius=0.1,
            fillColorSpace= rgbColor, lineColorSpace= rgbLineColor,
            fillColor=(retrievalCol), pos=(0, 0), lineWidth=15,
            lineColor=rgbLineColor)

        # shape cue
        shape_cue = visual.ImageStim(win, image = (retrievalShape))
        shape_cue.colorSpace = "rgb"
        shape_cue.color = [0.168,0.168,0.168]
        shape_cue.size = 0.3
        shape_cue.pos = (0, 0)

        # location cue
        location_cue = visual.Circle(win, units='norm', radius=0.1,
            fillColorSpace = rgbColor, lineColorSpace = rgbLineColor,
            fillColor = rgbFillColor,
            pos=(retrievalLoc), lineWidth=15,
            lineColor = rgbLineColor)

        # colour retrieval parameters
        colRetWheel = []
        colRetWheel = visual.Circle(win, units = 'norm', height = 0.3, radius = 40, fillColorSpace = rgbColor,
                                    lineColorSpace = rgbLineColor, fillColor = () in rgbColor,
                                    pos = (0, 0), lineWidth = 15,
                                    lineColor = rgbLineColor)
        for shape_colourRetrieval in range(trials):
            colRetWheel.draw()
            shape_cue.draw()
        for location_colourRetrial in range(trials):
            colRetWheel.draw()
            location_cue.draw()

        # shape retrieval parameters
        def shapeRetWheel (self):
            ImageStim(win, image=(360 in range(shapeValues)),
            colorSpace = rgbStimFill, color = rgbStimFill,
            radius = 40, size = 300, pos = (0, 0, 0))
            return shapeRetWheel
        for colour_shapeRetrieval in range(trials):
            shapeRetWheel.draw()
            colour_cue.draw()
        for location_shapeRetrieval in range(trials):
            shapeRetWheel.draw()
            location_cue.draw()

        # location retrieval parameters
        def locRetWheel (self):
            visual.Circle(win, units = 'height',
            radius = 40, fillColorSpace = rgbColor,
            lineColorSpace = rgbLineColor,
            fillColor = rgbStimFill,
            pos = (0, 0),lineWidth = 15,
            lineColor = rgbLineColor)
            return locRetWheel
        for locRetrieval1 in range (trials):
            locRetWheel.draw()
            colour_cue.draw()
        for locRetrieval2 in range(trials):
            locRetWheel.draw()
            shape_cue.draw()
    MouseComponent colour_wheel_response
      clickable = $colRetWheel
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent shape_wheel_response
      clickable = $shapeRetWheel
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent location_wheel_response
      clickable = $locRetWheel
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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
  Routine fixation
    TextComponent fix_cross
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.500
      text = +
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  Routine encoding
    CodeComponent encoding_code
      Code Type = Auto->JS
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      Before Experiment:
        VCS_1 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_1.png'
        VCS_2 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_2.png'
        VCS_3 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_3.png'
        VCS_4 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_4.png'
        VCS_5 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_5.png'
        VCS_6 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_6.png'
        VCS_7 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_7.png'
        VCS_8 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_8.png'
        VCS_9 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_9.png'
        VCS_10 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_10.png'
        VCS_11 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_11.png'
        VCS_12 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_12.png'
        VCS_13 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_13.png'
        VCS_14 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_14.png'
        VCS_15 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_15.png'
        VCS_16 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_16.png'
        VCS_17 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_17.png'
        VCS_18 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_18.png'
        VCS_19 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_19.png'
        VCS_20 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_20.png'
        VCS_21 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_21.png'
        VCS_22 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_22.png'
        VCS_23 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_23.png'
        VCS_24 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_24.png'
        VCS_25 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_25.png'
        VCS_26 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_26.png'
        VCS_27 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_27.png'
        VCS_28 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_28.png'
        VCS_29 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_29.png'
        VCS_30 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_30.png'
        VCS_31 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_31.png'
        VCS_32 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_32.png'
        VCS_33 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_33.png'
        VCS_34 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_34.png'
        VCS_35 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_35.png'
        VCS_36 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_36.png'
        VCS_37 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_37.png'
        VCS_38 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_38.png'
        VCS_39 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_39.png'
        VCS_40 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_40.png'
        VCS_41 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_41.png'
        VCS_42 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_42.png'
        VCS_43 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_43.png'
        VCS_44 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_44.png'
        VCS_45 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_45.png'
        VCS_46 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_46.png'
        VCS_47 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_47.png'
        VCS_48 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_48.png'
        VCS_49 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_49.png'
        VCS_50 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_50.png'
        VCS_51 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_51.png'
        VCS_52 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_52.png'
        VCS_53 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_53.png'
        VCS_54 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_54.png'
        VCS_55 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_55.png'
        VCS_56 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_56.png'
        VCS_57 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_57.png'
        VCS_58 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_58.png'
        VCS_59 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_59.png'
        VCS_60 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_60.png'
        VCS_61 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_61.png'
        VCS_62 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_62.png'
        VCS_63 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_63.png'
        VCS_64 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_64.png'
        VCS_65 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_65.png'
        VCS_66 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_66.png'
        VCS_67 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_67.png'
        VCS_68 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_68.png'
        VCS_69 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_69.png'
        VCS_70 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_70.png'
        VCS_71 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_71.png'
        VCS_72 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_72.png'
        VCS_73 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_73.png'
        VCS_74 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_74.png'
        VCS_75 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_75.png'
        VCS_76 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_76.png'
        VCS_77 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_77.png'
        VCS_78 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_78.png'
        VCS_79 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_79.png'
        VCS_80 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_80.png'
        VCS_81 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_81.png'
        VCS_82 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_82.png'
        VCS_83 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_83.png'
        VCS_84 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_84.png'
        VCS_85 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_85.png'
        VCS_86 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_86.png'
        VCS_87 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_87.png'
        VCS_88 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_88.png'
        VCS_89 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_89.png'
        VCS_90 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_90.png'
        VCS_91 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_91.png'
        VCS_92 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_92.png'
        VCS_93 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_93.png'
        VCS_94 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_94.png'
        VCS_95 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_95.png'
        VCS_96 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_96.png'
        VCS_97 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_97.png'
        VCS_98 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_98.png'
        VCS_99 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_99.png'
        VCS_100 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_100.png'
        VCS_101 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_101.png'
        VCS_102 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_102.png'
        VCS_103 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_103.png'
        VCS_104 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_104.png'
        VCS_105 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_105.png'
        VCS_106 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_106.png'
        VCS_107 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_107.png'
        VCS_108 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_108.png'
        VCS_109 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_109.png'
        VCS_110 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_110.png'
        VCS_111 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_111.png'
        VCS_112 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_112.png'
        VCS_113 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_113.png'
        VCS_114 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_114.png'
        VCS_115 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_115.png'
        VCS_116 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_116.png'
        VCS_117 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_117.png'
        VCS_118 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_118.png'
        VCS_119 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_119.png'
        VCS_120 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_120.png'
        VCS_121 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_121.png'
        VCS_122 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_122.png'
        VCS_123 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_123.png'
        VCS_124 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_124.png'
        VCS_125 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_125.png'
        VCS_126 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_126.png'
        VCS_127 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_127.png'
        VCS_128 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_128.png'
        VCS_129 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_129.png'
        VCS_130 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_130.png'
        VCS_131 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_131.png'
        VCS_132 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_132.png'
        VCS_133 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_133.png'
        VCS_134 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_134.png'
        VCS_135 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_135.png'
        VCS_136 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_136.png'
        VCS_137 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_137.png'
        VCS_138 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_138.png'
        VCS_139 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_139.png'
        VCS_140 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_140.png'
        VCS_141 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_141.png'
        VCS_142 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_142.png'
        VCS_143 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_143.png'
        VCS_144 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_144.png'
        VCS_145 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_145.png'
        VCS_146 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_146.png'
        VCS_147 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_147.png'
        VCS_148 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_148.png'
        VCS_149 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_149.png'
        VCS_150 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_150.png'
        VCS_151 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_151.png'
        VCS_152 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_152.png'
        VCS_153 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_153.png'
        VCS_154 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_154.png'
        VCS_155 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_155.png'
        VCS_156 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_156.png'
        VCS_157 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_157.png'
        VCS_158 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_158.png'
        VCS_159 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_159.png'
        VCS_160 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_160.png'
        VCS_161 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_161.png'
        VCS_162 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_162.png'
        VCS_163 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_163.png'
        VCS_164 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_164.png'
        VCS_165 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_165.png'
        VCS_166 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_166.png'
        VCS_167 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_167.png'
        VCS_168 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_168.png'
        VCS_169 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_169.png'
        VCS_170 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_170.png'
        VCS_171 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_171.png'
        VCS_172 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_172.png'
        VCS_173 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_173.png'
        VCS_174 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_174.png'
        VCS_175 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_175.png'
        VCS_176 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_176.png'
        VCS_177 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_177.png'
        VCS_178 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_178.png'
        VCS_179 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_179.png'
        VCS_180 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_180.png'
        VCS_181 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_181.png'
        VCS_182 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_182.png'
        VCS_183 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_183.png'
        VCS_184 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_184.png'
        VCS_185 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_185.png'
        VCS_186 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_186.png'
        VCS_187 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_187.png'
        VCS_188 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_188.png'
        VCS_189 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_189.png'
        VCS_190 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_190.png'
        VCS_191 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_191.png'
        VCS_192 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_192.png'
        VCS_193 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_193.png'
        VCS_194 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_194.png'
        VCS_195 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_195.png'
        VCS_196 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_196.png'
        VCS_197 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_197.png'
        VCS_198 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_198.png'
        VCS_199 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_199.png'
        VCS_200 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_200.png'
        VCS_201 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_201.png'
        VCS_202 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_202.png'
        VCS_203 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_203.png'
        VCS_204 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_204.png'
        VCS_205 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_205.png'
        VCS_206 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_206.png'
        VCS_207 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_207.png'
        VCS_208 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_208.png'
        VCS_209 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_209.png'
        VCS_210 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_210.png'
        VCS_211 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_211.png'
        VCS_212 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_212.png'
        VCS_213 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_212.png'
        VCS_214 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_214.png'
        VCS_215 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_215.png'
        VCS_216 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_216.png'
        VCS_217 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_217.png'
        VCS_218 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_128.png'
        VCS_219 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_219.png'
        VCS_220 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_220.png'
        VCS_221 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_221.png'
        VCS_222 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_222.png'
        VCS_223 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_223.png'
        VCS_224 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_224.png'
        VCS_225 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_225.png'
        VCS_226 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_226.png'
        VCS_227 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_227.png'
        VCS_228 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_228.png'
        VCS_229 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_229.png'
        VCS_230 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_230.png'
        VCS_231 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_231.png'
        VCS_232 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_232.png'
        VCS_233 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_233.png'
        VCS_234 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_234.png'
        VCS_235 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_235.png'
        VCS_236 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_236.png'
        VCS_237 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_237.png'
        VCS_238 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_238.png'
        VCS_239 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_239.png'
        VCS_240 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_240.png'
        VCS_241 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_241.png'
        VCS_242 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_242.png'
        VCS_243 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_243.png'
        VCS_244 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_244.png'
        VCS_245 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_245.png'
        VCS_246 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_246.png'
        VCS_247 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_247.png'
        VCS_248 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_248.png'
        VCS_249 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_249.png'
        VCS_250 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_250.png'
        VCS_251 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_251.png'
        VCS_252 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_252.png'
        VCS_253 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_253.png'
        VCS_254 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_254.png'
        VCS_255 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_255.png'
        VCS_256 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_256.png'
        VCS_257 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_257.png'
        VCS_258 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_258.png'
        VCS_259 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_259.png'
        VCS_260 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_260.png'
        VCS_261 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_261.png'
        VCS_262 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_262.png'
        VCS_263 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_263.png'
        VCS_264 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_264.png'
        VCS_265 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_265.png'
        VCS_266 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_266.png'
        VCS_267 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_267.png'
        VCS_268 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_268.png'
        VCS_269 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_269.png'
        VCS_270 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_270.png'
        VCS_271 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_271.png'
        VCS_272 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_272.png'
        VCS_273 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_273.png'
        VCS_274 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_274.png'
        VCS_275 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_275.png'
        VCS_276 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_275.png'
        VCS_277 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_277.png'
        VCS_278 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_278.png'
        VCS_279 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_279.png'
        VCS_280 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_280.png'
        VCS_281 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_281.png'
        VCS_282 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_282.png'
        VCS_283 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_283.png'
        VCS_284 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_284.png'
        VCS_285 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_285.png'
        VCS_286 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_286.png'
        VCS_287 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_287.png'
        VCS_288 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_288.png'
        VCS_289 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_289.png'
        VCS_290 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_290.png'
        VCS_291 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_291.png'
        VCS_292 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_292.png'
        VCS_293 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_293.png'
        VCS_294 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_294.png'
        VCS_295 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_295.png'
        VCS_296 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_296.png'
        VCS_297 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_297.png'
        VCS_298 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_298.png'
        VCS_299 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_299.png'
        VCS_300 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_300.png'
        VCS_301 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_301.png'
        VCS_302 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_302.png'
        VCS_303 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_303.png'
        VCS_304 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_304.png'
        VCS_305 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_305.png'
        VCS_306 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_306.png'
        VCS_307 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_307.png'
        VCS_308 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_308.png'
        VCS_309 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_309.png'
        VCS_310 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_310.png'
        VCS_311 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_311.png'
        VCS_312 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_312.png'
        VCS_313 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_313.png'
        VCS_314 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_314.png'
        VCS_315 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_315.png'
        VCS_316 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_316.png'
        VCS_317 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_317.png'
        VCS_318 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_318.png'
        VCS_319 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_319.png'
        VCS_320 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_320.png'
        VCS_321 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_321.png'
        VCS_322 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_322.png'
        VCS_323 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_323.png'
        VCS_324 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_324.png'
        VCS_325 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_325.png'
        VCS_326 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_326.png'
        VCS_327 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_327.png'
        VCS_328 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_328.png'
        VCS_329 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_329.png'
        VCS_330 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_330.png'
        VCS_331 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_331.png'
        VCS_332 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_332.png'
        VCS_333 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_333.png'
        VCS_334 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_334.png'
        VCS_335 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_335.png'
        VCS_336 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_336.png'
        VCS_337 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_337.png'
        VCS_338 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_338.png'
        VCS_339 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_339.png'
        VCS_340 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_340.png'
        VCS_341 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_341.png'
        VCS_342 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_342.png'
        VCS_343 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_343.png'
        VCS_344 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_344.png'
        VCS_345 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_345.png'
        VCS_346 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_346.png'
        VCS_347 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_347.png'
        VCS_348 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_348.png'
        VCS_349 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_349.png'
        VCS_350 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_350.png'
        VCS_351 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_351.png'
        VCS_352 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_352.png'
        VCS_353 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_353.png'
        VCS_354 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_354.png'
        VCS_355 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_355.png'
        VCS_356 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_356.png'
        VCS_357 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_357.png'
        VCS_358 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_358.png'
        VCS_359 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_359.png'
        VCS_360 = r'E:/PhD_WM/Experiments/Experiment 1/VCS_edit/VCS_360.png'
      Begin Experiment:
        ## Valitdated circular shape variables(VCS; Based on Li et al, 2020)
        from numpy.random import choice
        import random as random
        set_size = 6
        colorValues = [
        [227, 156, 77],[229, 156, 77],[230, 155, 77],
        [232, 154, 77],[233, 153, 77],[234, 153, 78],
        [236, 152, 78],[237, 151, 80],[238, 150, 80],
        [240, 150, 80],[241, 149, 80],[243, 148, 80],
        [244, 147, 82],[245, 146, 82],[247, 145, 83],
        [248, 145, 83],[249, 144, 85],[251, 143, 85],
        [252, 142, 85],[253, 141, 87],[255, 140, 87],
        [255, 139, 87],[255, 139, 89],[255, 138, 89],
        [255, 137, 91],[255, 136, 91],[255, 135, 91],
        [255, 134, 93],[255, 133, 94],[255, 132, 96],
        [255, 132, 96],[255, 131, 98],[255, 130, 99],
        [255, 129, 100],[255, 128, 101],[255, 127, 102],
        [255, 126, 104],[255, 126, 105],[255, 125, 105],
        [255, 123, 107],[255, 122, 107],[255, 122, 109],
        [255, 121, 111],[255, 120, 113],[255, 119, 113],
        [255, 119, 115],[255, 118, 117],[255, 117, 119],
        [255, 115, 119],[255, 115, 120],[255, 114, 122],
        [255, 114, 124],[255, 113, 124],[255, 112, 126],
        [255, 112, 128],[255, 110, 130],[255, 110, 131],
        [255, 109, 133],[255, 108, 135],[255, 108, 137],
        [255, 106, 137],[255, 107, 139],[255, 105, 140],
        [255, 105, 142],[255, 105, 144],[255, 104, 146],
        [255, 104, 148],[255, 103, 149],[255, 103, 151],
        [255, 103, 153],[255, 101, 155],[255, 101, 156],
        [255, 102, 158],[255, 100, 160],[255, 100, 162],
        [255, 100, 163],[255, 100, 165],[255, 99, 167],
        [255, 99, 169],[255, 99, 171],[255, 99, 172],
        [255, 99, 174],[255, 98, 176],[255, 98, 178],
        [255, 98, 179],[255, 98, 181],[255, 99, 183],
        [255, 99, 185],[255, 99, 186],[255, 99, 188],
        [255, 99, 190],[255, 99, 192],[255, 99, 193],
        [255, 100, 195],[255, 100, 197],[255, 100, 199],
        [255, 100, 201],[255, 102, 202],[255, 102, 204],
        [255, 102, 206],[255, 102, 208],[255, 103, 209],
        [255, 104, 211],[255, 105, 213],[255, 105, 215],
        [255, 105, 216],[255, 107, 218],[255, 107, 220],
        [255, 107, 222],[255, 109, 224],[255, 109, 225],
        [255, 109, 227],[255, 111, 229],[255, 111, 231],
        [255, 112, 232],[255, 113, 234],[255, 113, 236],
        [255, 114, 238],[255, 114, 240],[255, 116, 241],
        [255, 116, 241],[255, 117, 243],[254, 119, 245],
        [253, 119, 247],[250, 121, 249],[249, 121, 250],
        [247, 122, 252],[245, 123, 252],[244, 124, 254],
        [242, 125, 255],[241, 125, 255],[239, 126, 255],
        [236, 128, 255],[234, 129, 255],[233, 129, 255],
        [231, 130, 255],[228, 131, 255],[225, 133, 255],
        [224, 133, 255],[223, 134, 255],[220, 135, 255],
        [218, 136, 255],[217, 136, 255],[214, 137, 255],
        [212, 138, 255],[209, 140, 255],[207, 141, 255],
        [203, 142, 255],[200, 143, 255],[200, 143, 255],
        [197, 144, 255],[195, 145, 255],[191, 146, 255],
        [189, 147, 255],[187, 148, 255],[183, 149, 255],
        [181, 150, 255],[177, 151, 255],[175, 151, 255],
        [173, 152, 255],[169, 153, 255],[166, 154, 255],
        [164, 155, 255],[159, 156, 255],[157, 156, 255],
        [154, 157, 255],[152, 158, 255],[147, 159, 255],
        [144, 160, 255],[141, 160, 255],[138, 161, 255],
        [135, 162, 255],[130, 163, 255],[127, 163, 255],
        [124, 164, 255],[120, 165, 255],[117, 165, 255],
        [113, 166, 255],[110, 167, 255],[106, 167, 255],
        [102, 168, 255],[98, 169, 255],[93, 169, 255],
        [89, 170, 255],[84, 170, 255],[79, 171, 255],
        [73, 172, 255],[72, 172, 255],[66, 173, 255],
        [59, 173, 255],[51, 174, 255],[42, 175, 255],
        [41, 175, 255],[28, 176, 255],[4, 176, 255],
        [0, 177, 255],[0, 177, 255],[0, 178, 255],
        [0, 178, 255],[0, 179, 255],[0, 179, 255],
        [0, 180, 255],[0, 180, 255],[0, 181, 255],
        [0, 181, 255],[0, 181, 255],[0, 182, 255],
        [0, 182, 255],[0, 183, 255],[0, 183, 255],
        [0, 183, 255],[0, 184, 255],[0, 184, 255],
        [0, 184, 255],[0, 185, 255],[0, 185, 255],
        [0, 186, 255],[0, 185, 255],[0, 186, 255],
        [0, 186, 255],[0, 187, 255],[0, 187, 255],
        [0, 187, 255],[0, 187, 255],[0, 188, 255],
        [0, 188, 255],[0, 188, 255],[0, 188, 255],
        [0, 189, 255],[0, 189, 254],[0, 189, 252],
        [0, 189, 250],[0, 189, 250],[0, 190, 248],
        [0, 190, 246],[0, 190, 245],[0, 190, 243],
        [0, 190, 241],[0, 190, 239],[0, 190, 239],
        [0, 191, 237],[0, 191, 235],[0, 191, 233],
        [0, 191, 232],[0, 191, 230],[0, 191, 228],
        [0, 191, 226],[0, 191, 224],[0, 191, 223],
        [0, 191, 221],[0, 191, 219],[0, 191, 217],
        [0, 191, 215],[0, 192, 213],[0, 191, 212],
        [0, 191, 210],[0, 191, 208],[0, 192, 206],
        [0, 192, 204],[0, 191, 202],[0, 191, 201],
        [0, 191, 199],[0, 192, 197],
        [0, 192, 195],[0, 192, 193],[0, 191, 192],
        [0, 191, 190],[0, 191, 188],[0, 191, 186],
        [0, 191, 184],[8, 191, 183],[21, 191, 181],
        [29, 191, 179],[35, 191, 177],[41, 191, 175],
        [45, 191, 173],[49, 191, 172],[59, 190, 170],
        [62, 190, 168],[65, 190, 166],[67, 190, 164],
        [70, 190, 163],[76, 190, 161],[79, 189, 159],
        [81, 189, 157],[83, 189, 155],[88, 189, 154],
        [90, 189, 152],[91, 189, 150],[96, 188, 148],
        [98, 188, 146],[99, 188, 144],[103, 188, 143],
        [105, 188, 141],[109, 187, 139],[110, 187, 137],
        [111, 187, 135],[115, 187, 134],[116, 187, 132],
        [118, 186, 132],[119, 186, 130],[123, 186, 128],
        [126, 185, 126],[127, 185, 124],[130, 185, 123],
        [131, 185, 121],[134, 184, 119],[136, 184, 119],
        [137, 184, 117],[140, 183, 115],[141, 183, 113],
        [143, 183, 113],[145, 182, 112],[148, 182, 110],
        [149, 182, 108],[151, 181, 108],[153, 181, 106],
        [156, 180, 104],[156, 180, 102],[158, 180, 102],
        [161, 179, 100],[162, 179, 100],[163, 179, 98],
        [165, 178, 96],[167, 178, 97],[169, 177, 95],
        [171, 177, 95],[173, 176, 93],[176, 175, 91],
        [177, 175, 91],[178, 175, 89],[179, 174, 89],
        [181, 174, 87],[183, 173, 87],[185, 173, 87],
        [187, 172, 85],[189, 172, 85],[191, 171, 83],
        [192, 170, 83],[194, 170, 83],[196, 169, 81],
        [197, 169, 82],[199, 168, 82],[201, 167, 80],
        [202, 167, 80],[204, 166, 80],[205, 166, 80],
        [207, 165, 78],[209, 164, 78],[210, 164, 78],
        [212, 163, 78],[213, 162, 78],[215, 162, 76],[217, 161, 76],
        [218, 160, 76],[220, 160, 77],[221, 159, 77],
        [223, 158, 77], [224, 158, 77], [226, 157, 77]

        ]

        def convert_color_value(colorValues):
            return [round(((n/127.5)-1), 2) for n in colorValues]

        # checks whether the color distance is correct
        #def _check_dist(self, attempt, colorValues):
        #        for c in colorValues:
        #            raw_dist = abs(c - attempt)
        #            dist = min(raw_dist, 360 - raw_dist)

        #            if dist < self.min_color_dist:
        #                return False
        #        return True


        # generate color indexes to be used for the stimuli
        colorTrials = []
        shapeTrials = []
        locationTrials = []

        def generate_stimuli(set_size):
                colorTrials = []
                shapeTrials = []
                locationTrials = []

                color_dist = 0
                shape_dist = 0
                location_dist = 0
                print("GENERATE")
                for i in range (set_size):
                    color_attempt = random.randint(0, 359)
                    shape_attempt = random.randint(0, 359)
                    location_attempt = random.randint(0, 359)
                    if i > 1:

                        for n in range(len(colorTrials)):

                            while color_dist == 0 or shape_dist == 0 or location_dist == 0:
                                print("together")
                                color_dist = abs(colorTrials[n] - color_attempt)
                                shape_dist = abs(shapeTrials[n] - shape_attempt)
                                location_dist = abs(locationTrials[n] - location_attempt)
                                color_attempt = random.randint(0, 359)
                                shape_attempt = random.randint(0, 359)
                                location_attempt = random.randint(0, 359)

                    colorTrials.append(color_attempt)
                    shapeTrials.append(shape_attempt)
                    locationTrials.append(location_attempt)

                print("DONE GEN")
                return colorTrials, shapeTrials, locationTrials



        shapeValues = [
            VCS_1, VCS_2,
            VCS_3, VCS_4,
            VCS_5, VCS_6,
            VCS_7, VCS_8,
            VCS_9, VCS_10,
            VCS_11, VCS_12,
            VCS_13, VCS_14,
            VCS_15, VCS_16,
            VCS_17, VCS_18,
            VCS_19, VCS_20,
            VCS_21, VCS_22,
            VCS_23, VCS_24,
            VCS_25, VCS_26,
            VCS_27, VCS_28,
            VCS_29, VCS_30,
            VCS_31, VCS_32,
            VCS_33, VCS_34,
            VCS_35, VCS_36,
            VCS_37, VCS_38,
            VCS_39, VCS_40,
            VCS_41, VCS_42,
            VCS_43, VCS_44,
            VCS_45, VCS_46,
            VCS_47, VCS_48,
            VCS_49, VCS_50,
            VCS_51, VCS_52,
            VCS_53, VCS_54,
            VCS_55, VCS_56,
            VCS_57, VCS_58,
            VCS_59, VCS_60,
            VCS_61, VCS_62,
            VCS_63, VCS_64,
            VCS_65, VCS_66,
            VCS_67, VCS_68,
            VCS_69, VCS_70,
            VCS_71, VCS_72,
            VCS_73, VCS_74,
            VCS_75, VCS_76,
            VCS_77, VCS_78,
            VCS_79, VCS_80,
            VCS_81, VCS_82,
            VCS_83, VCS_84,
            VCS_85, VCS_86,
            VCS_87, VCS_88,
            VCS_89, VCS_90,
            VCS_91, VCS_92,
            VCS_93, VCS_94,
            VCS_95, VCS_96,
            VCS_97, VCS_98,
            VCS_99, VCS_100,
            VCS_101, VCS_102,
            VCS_103, VCS_104,
            VCS_105, VCS_106,
            VCS_107, VCS_108,
            VCS_109, VCS_110,
            VCS_111, VCS_112,
            VCS_113, VCS_114,
            VCS_115, VCS_116,
            VCS_117, VCS_118,
            VCS_119, VCS_120,
            VCS_121, VCS_122,
            VCS_123, VCS_124,
            VCS_125, VCS_126,
            VCS_127, VCS_128,
            VCS_129, VCS_130,
            VCS_131, VCS_132,
            VCS_133, VCS_134,
            VCS_135, VCS_136,
            VCS_137, VCS_138,
            VCS_139, VCS_140,
            VCS_141, VCS_142,
            VCS_143, VCS_144,
            VCS_145, VCS_146,
            VCS_147, VCS_148,
            VCS_149, VCS_150,
            VCS_151, VCS_152,
            VCS_153, VCS_154,
            VCS_155, VCS_156,
            VCS_157, VCS_158,
            VCS_159, VCS_160,
            VCS_161, VCS_162,
            VCS_163, VCS_164,
            VCS_165, VCS_166,
            VCS_167, VCS_168,
            VCS_169, VCS_170,
            VCS_171, VCS_172,
            VCS_173, VCS_174,
            VCS_175, VCS_176,
            VCS_177, VCS_178,
            VCS_179, VCS_180,
            VCS_181, VCS_182,
            VCS_183, VCS_184,
            VCS_185, VCS_186,
            VCS_187, VCS_188,
            VCS_189, VCS_190,
            VCS_191, VCS_192,
            VCS_193, VCS_194,
            VCS_195, VCS_196,
            VCS_197, VCS_198,
            VCS_199, VCS_200,
            VCS_201, VCS_202,
            VCS_203, VCS_204,
            VCS_205, VCS_206,
            VCS_207, VCS_208,
            VCS_209, VCS_210,
            VCS_211, VCS_212,
            VCS_213, VCS_211,
            VCS_212, VCS_213,
            VCS_214, VCS_215,
            VCS_216, VCS_217,
            VCS_218, VCS_219,
            VCS_220, VCS_221,
            VCS_222, VCS_223,
            VCS_224, VCS_225,
            VCS_226, VCS_227,
            VCS_229, VCS_230,
            VCS_231, VCS_232,
            VCS_233, VCS_234,
            VCS_235, VCS_236,
            VCS_237, VCS_238,
            VCS_238, VCS_239,
            VCS_240, VCS_241,
            VCS_242, VCS_244,
            VCS_244, VCS_245,
            VCS_246, VCS_247,
            VCS_248, VCS_249,
            VCS_250, VCS_251,
            VCS_252, VCS_253,
            VCS_254, VCS_255,
            VCS_256, VCS_257,
            VCS_258, VCS_259,
            VCS_260, VCS_261,
            VCS_262, VCS_263,
            VCS_264, VCS_265,
            VCS_266, VCS_270,
            VCS_271, VCS_272,
            VCS_273, VCS_274,
            VCS_275, VCS_276,
            VCS_277, VCS_278,
            VCS_279, VCS_280,
            VCS_281, VCS_282,
            VCS_283, VCS_284,
            VCS_285, VCS_286,
            VCS_287, VCS_288,
            VCS_289, VCS_290,
            VCS_291, VCS_292,
            VCS_293, VCS_294,
            VCS_295, VCS_296,
            VCS_297, VCS_298,
            VCS_299, VCS_300,
            VCS_301, VCS_302,
            VCS_303, VCS_304,
            VCS_305, VCS_306,
            VCS_307, VCS_308,
            VCS_309, VCS_310,
            VCS_311, VCS_312,
            VCS_313, VCS_314,
            VCS_315, VCS_316,
            VCS_317, VCS_318,
            VCS_319, VCS_320,
            VCS_321, VCS_321,
            VCS_322, VCS_323,
            VCS_324, VCS_325,
            VCS_326, VCS_327,
            VCS_328, VCS_329,
            VCS_330, VCS_331,
            VCS_332, VCS_333,
            VCS_334, VCS_335,
            VCS_336, VCS_337,
            VCS_338, VCS_339,
            VCS_340, VCS_341,
            VCS_342, VCS_343,
            VCS_344, VCS_345,
            VCS_346, VCS_347,
            VCS_348, VCS_349,
            VCS_350, VCS_351,
            VCS_352, VCS_353,
            VCS_354, VCS_355,
            VCS_356, VCS_357,
            VCS_358, VCS_359,
            VCS_360]
      Each Frame:
        from numpy.random import rand, shuffle
        import math as math
        import psychopy.tools.colorspacetools as cst
        from psychopy import core, visual

        cielabColor = (70, 20, 38)          # CIE*L*a*b colour space
        rgbColor=cst.cielab2rgb(cielabColor)


        win = visual.Window([1000, 1000],
            monitor="testMonitor", color=[0.168,0.168,0.168])
        print("FRAME")
        # locations of the stimuli
        distFromFix = 6
        stim1POS = [0, 0.4]
        stim2POS = [0, -0.4]
        stim3POS = [0.4, 0.2]
        stim4POS = [-0.4, 0.2]
        stim5POS = [-0.4, -0.2]
        stim6POS = [0.4, -0.2]

        colorTrials, shapeTrials, locationTrials = generate_stimuli(set_size)
        #print(colorTrials)
        #print(shapeTrials)
        #print(locationTrials)

        # encoding stimuli parameters
        stimulus1 = visual.ImageStim(win, image = shapeValues[shapeTrials[0]])
        stimulus1.colorSpace = "rgb"
        stimulus1.color = [x / 255 for x in colorValues[colorTrials[0]]]
        stimulus1.size = 0.3
        stimulus1.pos = stim1POS
        print(stimulus1.color)

        stimulus2 = visual.ImageStim(win, image = shapeValues[shapeTrials[1]])
        stimulus1.colorSpace = "rgb"
        stimulus2.color = [x / 255 for x in colorValues[colorTrials[1]]]
        stimulus2.size = 0.3
        stimulus2.pos = stim2POS

        stimulus3 = visual.ImageStim(win, image = shapeValues[shapeTrials[2]])
        stimulus1.colorSpace = "rgb"
        stimulus3.color = [x / 255 for x in colorValues[colorTrials[2]]]
        stimulus3.size = 0.3
        stimulus3.pos = stim3POS

        stimulus4 = visual.ImageStim(win, image = shapeValues[shapeTrials[3]])
        stimulus1.colorSpace = "rgb"
        stimulus4.color = [x / 255 for x in colorValues[colorTrials[3]]]
        stimulus4.size = 0.3
        stimulus4.pos = stim4POS

        stimulus5 = visual.ImageStim(win, image = shapeValues[shapeTrials[4]])
        stimulus1.colorSpace = "rgb"
        stimulus5.color = [x / 255 for x in colorValues[colorTrials[4]]]
        stimulus5.size = 0.3
        stimulus5.pos = stim5POS

        stimulus6 = visual.ImageStim(win, image = shapeValues[shapeTrials[5]])
        stimulus1.colorSpace = "rgb"
        stimulus6.color = [x / 255 for x in colorValues[colorTrials[5]]]
        stimulus6.size = 0.3
        stimulus6.pos = stim6POS

        stimulus1.draw()
        stimulus2.draw()
        stimulus3.draw()
        stimulus4.draw()
        stimulus5.draw()
        stimulus6.draw()
        core.wait(1.0, hogCPUperiod=0.2)
        win.flip()
      End Routine:
        # store the presented colour for the retrieal phase
        encStoredCols1=[]
        encStoredCols1.append(stimulus1.color)
        encStoredCols2=[]
        encStoredCols2.append(stimulus2.color)
        encStoredCols3=[]
        encStoredCols3.append(stimulus3.color)
        encStoredCols4=[]
        encStoredCols4.append(stimulus4.color)
        encStoredCols5=[]
        encStoredCols5.append(stimulus5.color)
        encStoredCols6=[]
        encStoredCols6.append(stimulus6.color)


        # store the presented shapes for the retrieval phase
        encStoredShape1=[]
        encStoredShape1.append(stimulus1.image)
        encStoredShape2=[]
        encStoredShape2.append(stimulus2.image)
        encStoredShape3=[]
        encStoredShape3.append(stimulus3.image)
        encStoredShape4=[]
        encStoredShape4.append(stimulus4.image)
        encStoredShape5=[]
        encStoredShape5.append(stimulus5.image)
        encStoredShape6=[]
        encStoredShape6.append(stimulus6.image)

        # store the presented locations for the retrieval phase
        encStoredLoc1=[]
        encStoredLoc1.append(stimulus1.pos)
        encStoredLoc2=[]
        encStoredLoc2.append(stimulus2.pos)
        encStoredLoc3=[]
        encStoredLoc3.append(stimulus3.pos)
        encStoredLoc4=[]
        encStoredLoc4.append(stimulus4.pos)
        encStoredLoc5=[]
        encStoredLoc5.append(stimulus5.pos)
        encStoredLoc6=[]
        encStoredLoc6.append(stimulus6.pos)
  Routine no_disruption
    TextComponent no_disruption_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import random
        random.seed()
        # specify which of the three inner loops will run on each of
        # the three iterations of the outer loop:
        nD_position = [1,0,0,0]
        pD_position=[0,1,0,0]
        cD1_position=[0,0,1,0]
        cD2_position=[0,0,0,1]

        order = [nD_position, pD_position, cD1_position, cD2_position]
        serialOrder = ([0, 1, 2, 3],[1,1,1,1])

        # randomise that order for this session:
        numberOfTrials = 1
        for numOfTrials in range(0,1):
            shuffle(order)
  Routine peripheral_disruption
    TextComponent periph_fix2
      color = $[0.294,0.294,0.294]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.100
      text [set every repeat] = +
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    KeyboardComponent periph2_keyPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.100
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  Routine break1
    TextComponent break_text1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Ready?

        Press space to continue.
  Routine break2
    TextComponent break_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Ready?

        Press space to continue.
  Routine break3
    TextComponent break_text3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Ready?

        Press space to continue.
  Routine feedback_B1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='Doh!'
      Begin Routine:
        msg1="change this"
    TextComponent feedback_txt_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg1
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  Routine feedback_B2
    CodeComponent feedback2_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg2="Doh!"
      Begin Routine:
        msg2="change this"
    TextComponent feedback_txt_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text [set every repeat]:
        $msg2
  Routine feedback_B3
    CodeComponent feedback3_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg3="Doh!"
      Begin Routine:
        msg3="change this"
    TextComponent feedback_txt_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg3
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  Routine feedback_B4
    CodeComponent feedback4_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg4="Doh!"
      Begin Routine:
        msg4="change this"
    TextComponent feedback_txt_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg4
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  Routine feedback_B5
    CodeComponent feedback5_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg5="Doh!"
      Begin Routine:
        msg5="change this"
    TextComponent feedback_txt_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg5
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  Routine feedback_B6
    CodeComponent feedback6_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg6="Doh!"
      Begin Routine:
        msg6="change this"
    TextComponent feedback_txt_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg6
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  Routine feedback_PT
    TextComponent feedback_txt_PT
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msgPT
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    CodeComponent feedback_code_PT
      Code Type = Auto->JS
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      Begin Experiment:
        msgPT = "Doh!"
  Routine end
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You have now finished the experiment.

        Thank you for your participation.
  Routine lower_B1
    SoundComponent lower_tone_B1
      sound = 600
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent fix1_B1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent key_resp_1_B1
      allowedKeys = 'left','right',
      correctAns = left
      forceEndRoutine = False
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      storeCorrect = True
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  Routine higher_B1
    SoundComponent higher_tone_B1
      sound = 610
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent fix_2_B1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent key_resp_2_B1
      allowedKeys = 'left','right',
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = 0.075
      storeCorrect = True
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  Routine lower_PT
    SoundComponent sound_1
      sound = 600
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent cent_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent cD1_keyPress
      allowedKeys = 'left',
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.925
      store = all keys
      storeCorrect = True
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  Routine higher_PT
    SoundComponent sound_2
      sound = 610
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent cent_fix
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent cD2_keyPress
      allowedKeys = 'right',
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.925
      storeCorrect = True
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  Routine higher_B5
    SoundComponent higher_tone_B5
      sound = 610
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent fix_1_B5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent key_resp_1_B5
      allowedKeys = 'left','right',
      correctAns = right
      forceEndRoutine = False
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.075
      storeCorrect = True
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  Routine lower_B5
    SoundComponent lower_tone_B5
      sound = 600
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = 0.075
      volume = 0.5
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    TextComponent fix_2_B5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.025
      text = +
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    KeyboardComponent key_resp_2_B5
      allowedKeys = 'left','right',
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = 0.075
      storeCorrect = True
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
        VCS_351 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_351.png'
        VCS_352 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_352.png'
        VCS_353 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_353.png'
        VCS_354 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_354.png'
        VCS_355 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_355.png'
        VCS_356 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_356.png'
        VCS_357 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_357.png'
        VCS_358 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_358.png'
        VCS_359 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_359.png'
        VCS_360 = r'D:/PhD_WM/Online Exps/VCS_edit/VCS_360.png'
      Begin Experiment:
        ## Valitdated circular shape variables(VCS; Based on Li et al, 2020)
        from numpy.random import choice
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Flow
  LoopInitiator practice loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator practiceTrial1 loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine fixation
      Routine encoding
      Routine fixation
      Routine lower_PT
      Routine higher_PT
      Routine retrieval
    LoopTerminator practiceTrial1
    LoopInitiator practiceTrials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine fixation
      Routine encoding
      Routine fixation
      Routine peripheral_disruption
      Routine fixation
      Routine retrieval
    LoopTerminator practiceTrials_2
    Routine feedback_PT
  LoopTerminator practice
  Routine break1
  LoopInitiator randOrder1 loopType="TrialHandler"
    isTrials = False
    loopType = fullRandom
    nReps = 0
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    LoopInitiator Block_1 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B1 loopType="TrialHandler"
        loopType = random
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine fixation
        Routine lower_B1
        Routine higher_B1
        Routine retrieval
      LoopTerminator run_B1
      Routine feedback_B1
    LoopTerminator Block_1
    LoopInitiator Block_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B2 loopType="TrialHandler"
        loopType = random
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine fixation
        Routine peripheral_disruption
        Routine retrieval
      LoopTerminator run_B2
      Routine feedback_B2
    LoopTerminator Block_2
  LoopTerminator randOrder1
  Routine break2
  LoopInitiator randOrder2 loopType="TrialHandler"
    isTrials = False
    loopType = fullRandom
    nReps = 0
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    LoopInitiator Block_3 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B3 loopType="TrialHandler"
        loopType = sequential
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine no_disruption
        Routine retrieval
      LoopTerminator run_B3
      Routine feedback_B3
    LoopTerminator Block_3
    LoopInitiator Block_4 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B4 loopType="TrialHandler"
        loopType = sequential
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine fixation
        Routine peripheral_disruption
        Routine fixation
        Routine retrieval
      LoopTerminator run_B4
      Routine feedback_B4
    LoopTerminator Block_4
  LoopTerminator randOrder2
  Routine break3
  LoopInitiator randOrder3 loopType="TrialHandler"
    isTrials = False
    loopType = fullRandom
    nReps = 0
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    LoopInitiator Block_5 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B5 loopType="TrialHandler"
        loopType = sequential
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine fixation
        Routine higher_B5
        Routine lower_B5
        Routine retrieval
      LoopTerminator run_B5
      Routine feedback_B5
    LoopTerminator Block_5
    LoopInitiator Block_6 loopType="TrialHandler"
      loopType = sequential
      nReps = 2.5
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      LoopInitiator run_B6 loopType="TrialHandler"
        loopType = sequential
        nReps = 10
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        Routine fixation
        Routine encoding
        Routine no_disruption
        Routine retrieval
      LoopTerminator run_B6
      Routine feedback_B6
    LoopTerminator Block_6
  LoopTerminator randOrder3
  Routine end
